CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"Series": "text", "Frame": "text", "FileLocation": "text", "ID": "text", "TH": "float"}
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<ID>TCGA-\\\\w{2}-\\\\w{4}).*threshold_(?P<TH>.*)\\\\.png$
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:source
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D:No
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:ID

UnmixColors:[module_num:5|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
    Stain count:2
    Select the input color image:source
    Name the output image:Hematoxylin
    Stain:Hematoxylin
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    Name the output image:Eosin
    Stain:Eosin
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Hematoxylin
    Name the primary objects to be identified:nulei
    Typical diameter of objects, in pixel units (Min,Max):10,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Size of adaptive window:200
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    Thresholding method:Otsu

IdentifySecondaryObjects:[module_num:7|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
    Select the input objects:nulei
    Name the objects to be identified:Cell
    Select the method to identify the secondary objects:Propagation
    Select the input image:Eosin
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Size of adaptive window:50
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    Thresholding method:Otsu

OverlayOutlines:[module_num:8|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:source
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#0000FE
    Select objects to display:nulei
    Select outline color:Green
    Select objects to display:Cell

SaveImages:[module_num:9|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:source
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:10|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|./outputs
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Count_nulei,Image|FileName_source,Image|Metadata_ID
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:Yes
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
CreateBatchFiles:[module_num:11|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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:/Users/zhangya/Documents/GBM/images
    Cluster root path:/media/af214dbe-b6fa-4f5e-932a-14b133ba4766/zhangya/svs-selected/
