CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:31
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"Series": "text", "Frame": "text", "FileLocation": "text", "ID": "text", "TH": "float"}
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<ID>TCGA-\\\\w{2}-\\\\w{4}).*threshold_(?P<TH>.*)\\\\.png$
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:GDC_test
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D:No
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:ID

UnmixColors:[module_num:5|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
    Stain count:2
    Select the input color image:GDC_test
    Name the output image:Hematoxylin
    Stain:Hematoxylin
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    Name the output image:Eosin
    Stain:Eosin
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Hematoxylin
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0, 1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Size of adaptive window:10
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    Thresholding method:Otsu

IdentifySecondaryObjects:[module_num:7|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:Eosin
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0, 1.0
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
IdentifyTertiaryObjects:[module_num:8|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

ColorToGray:[module_num:9|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
    Select the input image:GDC_test
    Conversion method:Combine
    Image type:RGB
    Name the output image:GDC_GRAY
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
MeasureImageQuality:[module_num:10|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
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:GDC_GRAY
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
MeasureGranularity:[module_num:11|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
    Image count:1
    Object count:0
    Select an image to measure:GDC_GRAY
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureImageIntensity:[module_num:12|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
    Select the image to measure:GDC_GRAY
    Measure the intensity only from areas enclosed by objects?:No
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
MeasureObjectSizeShape:[module_num:13|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
    Select objects to measure:Cells
    Calculate the Zernike features?:Yes

MeasureObjectIntensity:[module_num:14|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
    Hidden:1
    Select an image to measure:Eosin
    Select objects to measure:Cells

MeasureObjectIntensityDistribution:[module_num:15|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
    Hidden:1
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select an image to measure:Eosin
    Select objects to measure:Cells
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureTexture:[module_num:16|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
    Hidden:1
    Hidden:1
    Hidden:1
    Select an image to measure:Eosin
    Select objects to measure:Cells
    Texture scale to measure:3
    Measure images or objects?:Both

MeasureImageAreaOccupied:[module_num:17|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enabled:False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
    Hidden:1
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Cells
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
MeasureColocalization:[module_num:18|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
    Hidden:2
    Hidden:1
    Select an image to measure:Eosin
    Select an image to measure:Eosin
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select an object to measure:Cells

MeasureObjectNeighbors:[module_num:19|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Expand until adjacent
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    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectSizeShape:[module_num:20|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
    Select objects to measure:Nuclei
    Calculate the Zernike features?:Yes

MeasureObjectIntensity:[module_num:21|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
    Hidden:1
    Select an image to measure:Hematoxylin
    Select objects to measure:Nuclei

MeasureObjectIntensityDistribution:[module_num:22|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
    Hidden:1
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select an image to measure:Hematoxylin
    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureTexture:[module_num:23|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
    Hidden:1
    Hidden:1
    Hidden:1
    Select an image to measure:Hematoxylin
    Select objects to measure:Nuclei
    Texture scale to measure:3
    Measure images or objects?:Both

MeasureImageAreaOccupied:[module_num:24|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enabled:False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
    Hidden:1
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Nuclei
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
MeasureColocalization:[module_num:25|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
    Hidden:2
    Hidden:1
    Select an image to measure:Hematoxylin
    Select an image to measure:Hematoxylin
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select an object to measure:Nuclei

MeasureObjectNeighbors:[module_num:26|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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Expand until adjacent
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    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
SaveImages:[module_num:27|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:GDC_GRAY
    Select method for constructing file names:From image filename
    Select image name for file prefix:GDC_test
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|tif_test\\\\\\\\gray
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:28|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Hematoxylin
    Select method for constructing file names:From image filename
    Select image name for file prefix:GDC_test
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|tif_test\\\\\\\\hematoxylin
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:29|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Eosin
    Select method for constructing file names:From image filename
    Select image name for file prefix:GDC_test
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|tif_test\\\\\\\\eosin
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:30|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|tif_test
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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
CreateBatchFiles:[module_num:31|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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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